PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = $[-1,-1,-1]
  expName = RL_reversal
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine cue
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    ImageComponent left_box
      image = stimuli/box_transparent.png
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent right_box
      image = stimuli/box_transparent.png
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent cue_resp
      allowedKeys = '1','2'
      correctAns = $good_side
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent selection_indicator
      Code Type = Auto->JS
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      Begin Routine:
        selection_made = False

        selectionIndicator = visual.Rect(
                win=win, name='polygon',
                width=(0.5, 0.5)[0], height=(0.5, 0.5)[1],
                ori=0.0, draggable=False, anchor='center',
                lineWidth=4.0,
                colorSpace='rgb', lineColor='white', fillColor=None,
                depth=-4.0, interpolate=True,
                autoDraw = False)
      Each Frame:
        position = None
        if cue_resp.keys == '1':
            position = (-0.3, -0.2)
            selectionIndicator.setPos(position)
            selectionIndicator.setAutoDraw(True)
        elif cue_resp.keys == '2':
            position = (0.3, -0.2)
            selectionIndicator.setPos(position)
            selectionIndicator.setAutoDraw(True)
        selection_made = True
      End Routine:
        selection_made = False
        selectionIndicator.setAutoDraw(False)
    CodeComponent good_side_code
      Code Type = Auto->JS
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      Begin Experiment:
        good_side = "right"
        #counter = 0
        num_rewarded = 0
        num_switch = 0
      Begin Routine:
        #if the participant has the right number of
        #correct guesses
        print(num_rewarded)
        print(sequence[exp_correct])
        if num_rewarded == num_switch_list[num_switch]:
            if good_side == "right":
                good_side = "left"
            elif good_side == "left":
                good_side = "right"
            num_rewarded = 0
            num_switch = num_switch + 1 # we move one switch forward


        #if good_side has switched, make first correct choice
        #a gold coin
      Each Frame:
        #if good_side has switched and they pick the good side
        #for the first time, make first correct choice
        #a gold coin

        if(num_rewarded == 0 and sequence[exp_correct] == 0 and ((cue_resp.keys == '1' and good_side == "left") or (cue_resp.keys == '2' and good_side == "right"))):
            print("trying to switch")
            sequence[exp_correct] = 1
            #double check this logic:
            next_1 = sequence.index(1, trials.thisN + 1)
            print("next one " + str(next_1))
            sequence[next_1] = 0
      End Routine:
        #Check if these need to be reward or just right
        # I'm guessing rewarded
        if(cue_resp.keys == '1' and good_side == "left"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1



        if(cue_resp.keys == '2' and good_side == "right"):
            if(sequence[exp_correct] == 1):
                num_rewarded = num_rewarded + 1
                num_gold_coins = num_gold_coins + 1
            exp_correct = exp_correct + 1


        thisExp.addData('good_side', good_side)
        thisExp.addData('probability_sequence_value', sequence[exp_correct - 1])
        thisExp.addData('magic_number', num_switch_list[num_switch])
        thisExp.addData('num_rewarded', num_rewarded)
        thisExp.addData('num_switch', num_switch)
        thisExp.addData('total_correct', exp_correct)
        thisExp.addData('num_gold_coins', num_gold_coins)
    CodeComponent too_slow_message
      Code Type = Auto->JS
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      Begin Routine:
        routine_start = t
        currentOpacity = 0
      Each Frame:
        #no key was pressed and time has elapsed
        if(len(cue_resp.keys) == 0 and (t - routine_start > 1.5)):
            currentOpacity = 1
    TextComponent too_slow_text
      letterHeight = 0.1
      opacity [set every frame] = currentOpacity
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = Too slow!
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  Routine outcome
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    CodeComponent box_selection_code
      Code Type = Auto->JS
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      Begin Routine:
        #if no press is made
        right_image = 'stimuli/box_transparent.png'
        left_image = 'stimuli/box_transparent.png'
        #if right press
        if cue_resp.keys=='1':
            #look back one since exp_correct has been incremented
            if sequence[exp_correct - 1] == 1 and good_side == "left":
                left_image = 'stimuli/box_coin_transparent.png'
            else:
                left_image = 'stimuli/box_empty_transparent.png'
        #if left press
        # load in images of either coin box or empty box conditionally
        elif cue_resp.keys=='2': #same as above
            #look back one since exp_correct has been incremented
            if sequence[exp_correct -1 ] == 1 and good_side == "right":
                right_image = 'stimuli/box_coin_transparent.png'
            else:
                right_image = 'stimuli/box_empty_transparent.png'
        else:
            Choice="NA"
      End Routine:
        if cue_resp.keys=='1':
            thisExp.addData('outcome_image', left_image)
        elif cue_resp.keys=='2':
            thisExp.addData('outcome_image', right_image)
        else:
            thisExp.addData('outcome_image', "no selection made")
    ImageComponent outcome_left_box
      image [set every repeat] = $left_image
      pos = (-0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent outcome_right_box
      image [set every repeat] = $right_image
      pos = (0.3, -0.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
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  Routine get_ready
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    TextComponent get_ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get Ready!
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    KeyboardComponent advance_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent int_runs
      Code Type = Auto->JS
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      Begin Routine:
        num_gold_coins = 0

        coin = random.randint(1, 2)
        if coin == 1:
            good_side = "left"
        else:
            good_side = "right"
  Routine run_feedback
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    TextComponent coins_won_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $'Congratulations, you collected ' + str(num_gold_coins) + ' gold coins!!'
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  Routine scanner_trigger
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    TextComponent scanner_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = waiting for scanner
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    KeyboardComponent key_resp
      allowedKeys = '=', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent trigger_code
      Code Type = Auto->JS
  Routine summary_instructions
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    TextComponent summary_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1. In the game, there will be two boxes, but only one is magical.

        2. Sometimes, the magical box switches sides!

        3. Sometimes, even the magical box does not have a coin.


        Try to collect all the coins!
    CodeComponent define_switches_code
      Code Type = Auto->JS
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      Begin Experiment:
        #number correct for the switch occurs
        num_switch_list = [7, 8, 9, 10, 11, 12, 13, 14, 15]
        #now shuffle the list
        random.shuffle(num_switch_list)
    CodeComponent probability_sequence_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        import csv
      Begin Experiment:
        sequence = []
        exp_correct = 0 #number of correct choices made in the experiment


        #TODO: pull this from experiment variables.
        number_of_trials = 150

        while len(sequence) < number_of_trials:
            #generate a probabilty list at 75p by alternating
            #ten trials at 80p and ten trials 70p.
            sequence_80 = [0] * 2 + [1] * 8
            random.shuffle(sequence_80)
            sequence_70 = [0] * 3 + [1] * 7
            random.shuffle(sequence_70)
            sequence = sequence + sequence_80 + sequence_70
            #TODO: output this sequence to a .csv that gets saved.

        with open('test.csv', 'w', newline='') as myfile:
             wr = csv.writer(myfile)
             wr.writerow(sequence)
      Begin Routine:
        num_gold_coins = 0
    KeyboardComponent advance_to_runs
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine summary_instructions
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine get_ready
    Routine scanner_trigger
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 50
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      Routine cue
      Routine outcome
      Routine fixation
    LoopTerminator trials
    Routine run_feedback
  LoopTerminator runs
